PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = LieDetection
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Routines
  Routine Start
    TextComponent text
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Wellcome!

        This is an experiement about lie detection.

        Press 'space' to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Baseline
    TextComponent fixation_cross
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine NumberTest
    TextComponent question_1
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Is the displayed number greater than 10?
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    TextComponent press_key
      languageStyle = RTL
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = "←" No         Yes "→" 
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    TextComponent num_test
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    CodeComponent number_genertion
      Code Type = Auto->JS
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      Begin Experiment:
        import random
      Begin Routine:
        # generate a random number to be displayed which is not 10
        num = 10
        corResp = ''
        while num == 10:
            num = random.randint(0,20)

        # write generated number to data
        thisExp.addData('num_test.value', num)

        # generate correct response (always truth)
        if num > 10:
            corResp = 'right'
        else:
            corResp = 'left'

        num_test.text = str(num)
    PolygonComponent timer_line
      fillColor = white
      lineWidth = 10
      pos = (0, -0.45)
      saveStartStop = False
      shape = line
      size = (1,0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    CodeComponent timer
      Code Type = Auto->JS
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      Begin Experiment:
        import time
        import sys
        from psychopy import event
      Begin Routine:
        # configure visual timer
        time = 5
        timer = core.CountdownTimer(time)

        # size of line
        timer_line.size = [1,0.02]
        width = timer_line.size[0]

        # how much the line shrinks each frame
        dist = width/(60.5*time)
        timer_line.autoDraw= False
      Each Frame:
        while timer.getTime() > 0 and continueRoutine:
            # adjust line size to visualize time
            width -= dist
            timer_line.size = [width,0.02]
            timer_line.draw()

            # check if response was given
            keys = event.getKeys()
            if keys:
                if 'right' in keys:
                    continueRoutine = False
                if 'left' in keys:
                    continueRoutine = False

            win.flip()
    KeyboardComponent arrow_response
      allowedKeys = 'left','right'
      correctAns = $corResp
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 5.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Instructions
    TextComponent instructions_text
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In the following, you will be asked if the number in the middle is greater than 10.

        Please always lie!

        Press 'space' to start
    KeyboardComponent instructions_space
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent instructions_code
      Code Type = Auto->JS
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      Begin Experiment:
        # here you can change the order in
        # which they should lie, tell truth or choose

        # lie = 0, truth = 1, choorse = 2

        order = [2, 1, 0]
      Begin Routine:
        # depending on the oder decided in the beginning
        # edit the displayed text and write to output file
        if order[trials_instruct.thisN] == 0:
            instructions_text.text  = "In the following, you will be asked if the number in the middle is greater than 10.\n \nPlease always lie! \n \nPress 'space' to start"
            thisExp.addData('instructions', 'lie')
        if order[trials_instruct.thisN] == 1:
            instructions_text.text  = "In the following, you will be asked if the number in the middle is greater than 10.\n \nPlease always tell the truth! \n \nPress 'space' to start"
            thisExp.addData('instructions', 'truth')
        if order[trials_instruct.thisN] == 2:
            instructions_text.text  = "In the following, you will be asked if the number in the middle is greater than 10.\n \nYou can choose to lie or tell the truth! \n \nPress 'space' to start"
            thisExp.addData('instructions', 'choose')
        #instruct = visual.TextBox2(win, text=instructions_text1, font='Open Sans', letterHeight=50, color="white", alignment='center', pos=(0,0), size=[None, None], units='pix',bold=True)
        #instruct.autoDraw = True
Flow
  Routine Start
  LoopInitiator trials_instruct loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine Instructions
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 2
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      Routine Baseline
      Routine NumberTest
    LoopTerminator trials
  LoopTerminator trials_instruct
